CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160503183100
GitHash:ac0529e
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Select the rule criteria:and (file does contain "cyto")
    Name to assign these images:cyto
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "nuclear")
    Name to assign these images:nuclear
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:nuclear
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Automatic
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:cyto
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    Regularization factor:0.05
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
MeasureImageAreaOccupied:[module_num:7|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
    Hidden:2
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Nuclei
    Retain a binary image of the object regions?:Yes
    Name the output binary image:Nuclei_Stain
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Cells
    Retain a binary image of the object regions?:Yes
    Name the output binary image:Cyto_Stain
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
MeasureObjectSizeShape:[module_num:8|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
    Select objects to measure:Nuclei
    Select objects to measure:Cells
    Calculate the Zernike features?:Yes

DisplayHistogram:[module_num:9|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
    Select the object whose measurements will be displayed:Nuclei
    Select the object measurement to plot:AreaShape_Area
    Number of bins:100
    Transform the data prior to plotting along the X-axis?:no
    How should the Y-axis be scaled?:linear
    Enter a title for the plot, if desired:Distribution of Nuclei Area
    Specify min/max bounds for the X-axis?:No
    Minimum/maximum values for the X-axis:0.0,1.0

DisplayHistogram:[module_num:10|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
    Select the object whose measurements will be displayed:Cells
    Select the object measurement to plot:AreaShape_Area
    Number of bins:100
    Transform the data prior to plotting along the X-axis?:no
    How should the Y-axis be scaled?:linear
    Enter a title for the plot, if desired:Distribution of Cell Area
    Specify min/max bounds for the X-axis?:No
    Minimum/maximum values for the X-axis:0.0,1.0

MeasureObjectIntensity:[module_num:11|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
    Hidden:2
    Select an image to measure:nuclear
    Select an image to measure:cyto
    Select objects to measure:Nuclei
    Select objects to measure:Cells

DisplayHistogram:[module_num:12|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
    Select the object whose measurements will be displayed:Nuclei
    Select the object measurement to plot:Intensity_IntegratedIntensity_nuclear
    Number of bins:100
    Transform the data prior to plotting along the X-axis?:no
    How should the Y-axis be scaled?:linear
    Enter a title for the plot, if desired:Integrated Fluorescence Intensity of Nuclei
    Specify min/max bounds for the X-axis?:No
    Minimum/maximum values for the X-axis:0.0,1.0

DisplayHistogram:[module_num:13|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
    Select the object whose measurements will be displayed:Cells
    Select the object measurement to plot:Intensity_IntegratedIntensity_cyto
    Number of bins:100
    Transform the data prior to plotting along the X-axis?:no
    How should the Y-axis be scaled?:linear
    Enter a title for the plot, if desired:Integrated Fluorescence Intensity of Cells
    Specify min/max bounds for the X-axis?:No
    Minimum/maximum values for the X-axis:0.0,1.0

DisplayScatterPlot:[module_num:14|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
    Type of measurement to plot on X-axis:Object
    Select the object to plot on the X-axis:Nuclei
    Select the measurement to plot on the X-axis:AreaShape_Area
    Type of measurement to plot on Y-axis:Object
    Select the object to plot on the Y-axis:Nuclei
    Select the measurement to plot on the Y-axis:Intensity_IntegratedIntensity_nuclear
    How should the X-axis be scaled?:linear
    How should the Y-axis be scaled?:linear
    Enter a title for the plot, if desired:Nuclei SccatterPlot of Integrated Fluorescence Intensity vs. Area

DisplayScatterPlot:[module_num:15|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
    Type of measurement to plot on X-axis:Object
    Select the object to plot on the X-axis:Nuclei
    Select the measurement to plot on the X-axis:AreaShape_Area
    Type of measurement to plot on Y-axis:Object
    Select the object to plot on the Y-axis:Nuclei
    Select the measurement to plot on the Y-axis:Intensity_MeanIntensity_nuclear
    How should the X-axis be scaled?:linear
    How should the Y-axis be scaled?:linear
    Enter a title for the plot, if desired:MeanIntensity
